PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = Word priming experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test
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    TextComponent TextText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to submit
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Learning phase.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'Case'},
      {'study_word': 'cruise'},
      {'study_word': 'Police'},
      {'study_word': 'keys'},
      {'study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p'},
      {'test_word': '_ha_t'},
      {'test_word': 'T_hi_t'},
      {'test_word': '_ou_e'},
      {'test_word': 'P_as_tr'},
      {'test_word': 'c_s_'},
      {'test_word': '_ru_is_'},
      {'test_word': 'P_li_e'},
      {'test_word': 'K_y_'},
      {'test_word': 'P_st_r'},
      {'test_word': '_o_rd'},
      {'test_word': '_a_bl_'},
      {'test_word': '_ho_e'},
      {'test_word': '_oo_'},
      {'test_word': 'c_s_io'},
      {'test_word': 'ta_l_'},
      {'test_word': 'p_nc_l'},
      {'test_word': 'v_s_'},
      {'test_word': 'bo_t_e'},
      {'test_word': 'c_m_ra'}]
    Routine Test
  LoopTerminator trials_2
