PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = final
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        You will see a series of letter strings.
        Press ‘f’ if it is a REAL word.
        Press ‘j’ if it is NOT a word.
        Please respond as quickly and accurately as possible.
        Press SPACE to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test
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    TextComponent stimulus
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'f','j'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Word list.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'apple', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'chair', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'house ', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'table', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'cards', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'bread', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'money', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'happy', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'night', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'dance', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'light', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'stone', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'glass', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'smile', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'},
      {'word': 'dream', 'frequency': 'high', 'condition': 'word', 'correctAns': 'f', 'length': 'short'}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
    Routine fixation
    Routine Test
  LoopTerminator trials
